PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1920, 1080)
  expName = multimodalemotion
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    ImageComponent image_happy
      image [set every repeat] = $face_happy
      pos = (-0.4, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.8
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    ImageComponent image_sad
      image [set every repeat] = $face_sad
      pos = (0, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.8
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    ImageComponent image_anger
      image [set every repeat] = $face_anger
      pos = (0.4, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.8
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    ImageComponent image_fear
      image [set every repeat] = $face_fear
      pos = (-0.4, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.8
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    ImageComponent image_disgust
      image [set every repeat] = $face_disgust
      pos = (0, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.8
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    ImageComponent image_surprise
      image [set every repeat] = $face_surprise
      pos = (0.4, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.8
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    SoundComponent audio_stim
      forceEndRoutine = False
      sound [set every repeat] = $target_audio
      startVal [time (s)] = 1.8
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    MouseComponent mouse_resp
      clickable = image_happy,image_sad,image_anger,image_fear,image_disgust,image_surprise
      correctAns = corr_ans
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 1.8
      storeCorrect = True
      syncScreenRefresh = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_ultimate_random.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'fear'), ('target_audio', 'audio/F1fear.wav'), ('corr_ans', 'image_fear'), ('face_happy', 'emotional_faces/woman_sub3/happiness.jpg'), ('face_sad', 'emotional_faces/woman_sub3/sadness.jpg'), ('face_anger', 'emotional_faces/woman_sub3/anger.jpg'), ('face_fear', 'emotional_faces/woman_sub3/fear.jpg'), ('face_disgust', 'emotional_faces/woman_sub3/disgust.jpg'), ('face_surprise', 'emotional_faces/woman_sub3/surprise.jpg')]),
      OrderedDict([('trial_type', 'anger'), ('target_audio', 'audio/M2anger.wav'), ('corr_ans', 'image_anger'), ('face_happy', 'emotional_faces/man_sub2/happiness.jpg'), ('face_sad', 'emotional_faces/man_sub2/sadness.jpg'), ('face_anger', 'emotional_faces/man_sub2/anger.jpg'), ('face_fear', 'emotional_faces/man_sub2/fear.jpg'), ('face_disgust', 'emotional_faces/man_sub2/disgust.jpg'), ('face_surprise', 'emotional_faces/man_sub2/surprise.jpg')]),
      OrderedDict([('trial_type', 'fear'), ('target_audio', 'audio/M3fear.wav'), ('corr_ans', 'image_fear'), ('face_happy', 'emotional_faces/man_sub5/happiness.jpg'), ('face_sad', 'emotional_faces/man_sub5/sadness.jpg'), ('face_anger', 'emotional_faces/man_sub5/anger.jpg'), ('face_fear', 'emotional_faces/man_sub5/fear.jpg'), ('face_disgust', 'emotional_faces/man_sub5/disgust.jpg'), ('face_surprise', 'emotional_faces/man_sub5/surprise.jpg')]),
      OrderedDict([('trial_type', 'sad'), ('target_audio', 'audio/F1sad.wav'), ('corr_ans', 'image_sad'), ('face_happy', 'emotional_faces/woman_sub5/happiness.jpg'), ('face_sad', 'emotional_faces/woman_sub5/sadness.jpg'), ('face_anger', 'emotional_faces/woman_sub5/anger.jpg'), ('face_fear', 'emotional_faces/woman_sub5/fear.jpg'), ('face_disgust', 'emotional_faces/woman_sub5/disgust.jpg'), ('face_surprise', 'emotional_faces/woman_sub5/surprise.jpg')])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
    Routine trial
  LoopTerminator trials
